#  Example Qudi configuration file.
#  The recommended path for user specific files is C:\Users\<user_name>\qudi\config

global:
    # list of modules to load when starting
    startup_modules: []

    # Module server configuration for accessing qudi GUI/logic/hardware modules from remote clients
    remote_modules_server:
        address: 'localhost'
        port: 12345

    # Server port for serving the active qudi module namespace locally (localhost).
    # Used by e.g. the Qudi jupyter kernel.
    namespace_server_port: 18861

    # If this flag is set (True), all arguments passed to qudi module APIs from remote
    # (jupyter notebook, qudi console, remote modules) will be wrapped and passed "per value"
    # (serialized and de-serialized). This is avoiding a lot of inconveniences with using numpy in
    # remote clients.
    # If you do not want to use this workaround and know what you are doing, you can disable this
    # feature by setting this flag to False.
    force_remote_calls_by_value: True

    # Qss stylesheet for controlling the appearance of the GUIs.
    # Absolute path or relative to qudi.artwork.styles
    stylesheet: 'qdark.qss'

    # Default root directory for measurement data storage. All eventual data sub-directories should
    # be contained within this directory. This is not enforced, just convention.
    # The fallback directory is <user home>/qudi/Data/
    # default_data_dir: C:\Users\neverhorst\qudi\Data

    # Save data to daily data sub-directories by default
    daily_data_dirs: True

gui:
    time_series_gui:
        module.Class: 'time_series.time_series_gui.TimeSeriesGui'
        options:
            use_antialias: True  # optional, set to False if you encounter performance issues
        connect:
            _time_series_logic_con: time_series_reader_logic

    scanner_gui:
        module.Class: 'scanning.scannergui.ScannerGui'
        options:
            image_axes_padding: 0.02
            default_position_unit_prefix: null  # optional, use unit prefix characters, e.g. 'u' or 'n'
        connect:
            scanning_logic: scanning_probe_logic
            data_logic: scanning_data_logic
            optimize_logic: scanning_optimize_logic

    poi_manager_gui:
        module.Class: 'poimanager.poimanagergui.PoiManagerGui'
        options:
            data_scan_axes: xy  #optional, default: xy
        connect:
            poi_manager_logic: 'poi_manager_logic'

    laser_gui:
        module.Class: 'laser.laser_gui.LaserGui'
        connect:
            laser_logic: laser_logic

    switch_gui:
        module.Class: 'switch.switch_gui.SwitchGui'
        connect:
            switchlogic: 'switch_logic'

    pulsed_gui:
        module.Class: 'pulsed.pulsed_maingui.PulsedMeasurementGui'
        connect:
            pulsedmasterlogic: 'pulsed_master_logic'

logic:
    time_series_reader_logic:
        module.Class: 'time_series_reader_logic.TimeSeriesReaderLogic'
        options:
            max_frame_rate: 20  # optional (default: 20Hz)
            channel_buffer_size: 1048576  # optional (default: 1MSample)
            max_raw_data_bytes: 1073741824  # optional (default: 1GB)
        connect:
            streamer: instream_dummy

    scanning_probe_logic:
        module.Class: 'scanning_probe_logic.ScanningProbeLogic'
        options:
            max_history_length: 20
            max_scan_update_interval: 2
            position_update_interval: 1
        connect:
            scanner: scanner_dummy

    scanning_data_logic:
        module.Class: 'scanning_data_logic.ScanningDataLogic'
        options:
            max_history_length: 20
        connect:
            scan_logic: scanning_probe_logic

    scanning_optimize_logic:
        module.Class: 'scanning_optimize_logic.ScanningOptimizeLogic'
        connect:
            scan_logic: scanning_probe_logic

    laser_logic:
        module.Class: 'laser_logic.LaserLogic'
        options:
            query_interval: 0.1
        connect:
            laser: 'laser_dummy'

    switch_logic:
        module.Class: 'switch_logic.SwitchLogic'
        options:
            watchdog_interval: 1
            autostart_watchdog: True
        connect:
            switch: 'switch_interfuse'

    pulsed_master_logic:
        module.Class: 'pulsed.pulsed_master_logic.PulsedMasterLogic'
        connect:
            pulsedmeasurementlogic: 'pulsed_measurement_logic'
            sequencegeneratorlogic: 'sequence_generator_logic'

    sequence_generator_logic:
        module.Class: 'pulsed.sequence_generator_logic.SequenceGeneratorLogic'
        #overhead_bytes: 0
        #additional_predefined_methods_path: null
        #additional_sampling_functions_path: null
        #assets_storage_path:
        connect:
            pulsegenerator: 'pulser_dummy'

    pulsed_measurement_logic:
        module.Class: 'pulsed.pulsed_measurement_logic.PulsedMeasurementLogic'
        options:
            raw_data_save_type: 'text'
            #additional_extraction_path:
            #additional_analysis_path:
        connect:
            fastcounter: 'fast_counter_dummy'
            #microwave: 'microwave_dummy'
            pulsegenerator: 'pulser_dummy'

hardware:

    scanner_dummy:
        module.Class: 'dummy.scanning_probe_dummy.ScanningProbeDummy'
        options:
            position_ranges:
                'x': [0, 200e-6]
                'y': [0, 200e-6]
                'z': [-100e-6, 100e-6]
            frequency_ranges:
                'x': [0, 10000]
                'y': [0, 10000]
                'z': [0, 5000]
            resolution_ranges:
                'x': [2, 2147483647]
                'y': [2, 2147483647]
                'z': [2, 2147483647]
            position_accuracy:
                'x': 10e-9
                'y': 10e-9
                'z': 50e-9
            spot_density: 1e11

    finite_sampling_input_dummy:
        module.Class: 'dummy.finite_sampling_input_dummy.FiniteSamplingInputDummy'
        options:
            simulation_mode: 'ODMR'
            sample_rate_limits: [1, 1e6]
            frame_size_limits: [1, 1e9]
            channel_units:
                'APD counts': 'c/s'
                'Photodiode': 'V'

    finite_sampling_output_dummy:
        module.Class: 'dummy.finite_sampling_output_dummy.FiniteSamplingOutputDummy'
        options:
            sample_rate_limits: [1, 1e6]
            frame_size_limits: [1, 1e9]
            output_mode: 'JUMP_LIST'
            channel_units:
                'Frequency': 'Hz'
                'Voltage': 'V'

    finite_sampling_io_dummy:
        module.Class: 'dummy.finite_sampling_io_dummy.FiniteSamplingIODummy'
        options:
            sample_rate_limits: [1, 1e6]
            frame_size_limits: [1, 1e9]
            default_output_mode: 'JUMP_LIST'
            input_channel_units:
                'APD counts': 'c/s'
                'Photodiode': 'V'
            output_channel_units:
                'Frequency': 'Hz'
                'Voltage': 'V'

    laser_dummy:
        module.Class: 'dummy.simple_laser_dummy.SimpleLaserDummy'

    microwave_dummy:
        module.Class: 'dummy.microwave_dummy.MicrowaveDummy'

    switch_interfuse:
        module.Class: 'interfuse.switch_combiner_interfuse.SwitchCombinerInterfuse'
        options:
            extend_hardware_name: True
        connect:
            switch1: 'switch1_dummy'
            switch2: 'process_control_dummy'


    switch1_dummy:
        module.Class: 'dummy.switch_dummy.SwitchDummy'
        options:
            name: 'First'  # optional
            remember_states: True  # optional
            switches:
                one: ['down', 'up']
                two: ['down', 'up']
                three: ['low', 'middle', 'high']

    fast_counter_dummy:
        module.Class: 'dummy.fast_counter_dummy.FastCounterDummy'
        options:
            gated: False

    pulser_dummy:
        module.Class: 'dummy.pulser_dummy.PulserDummy'
        options:
            force_sequence_option: False

    process_control_dummy:
        module.Class: 'dummy.process_control_dummy.ProcessControlDummy'
        options:
            process_value_channels:
                Temperature:
                    unit: 'K'
                    limits: [0, .inf]
                    dtype: float
                Voltage:
                    unit: 'V'
                    limits: [-10.0, 10.0]
                    dtype: float
            setpoint_channels:
                Current:
                    unit: 'A'
                    limits: [-5, 5]
                    dtype: float
                Frequency:
                    unit: 'Hz'
                    limits: [100.0e3, 20.0e9]
                    dtype: float
            linear_dependency:
                process_value_channel: 'Temperature'
                setpoint_channel: 'Current'
                slope: 10
                offset: 100
                noise: 0.1
